WorkflowBuilder(Version=2.3.0)
Bonsai.Shaders.RenderFrame
-> Bonsai.VR.GetDevicePoses
-> PublishSubject DevicePoses
-> Bonsai.VR.GetHmdState(NearClip=0.1, FarClip=100)
-> PublishSubject HmdState => #35
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    RightViewMatrix as ViewMatrix,
    RightProjectionMatrix as ProjectionMatrix)
-> MulticastSubject Draw
-> Bonsai.VR.DrawFramebuffer(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit") => #6
#35 -> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    RightViewMatrix as ViewMatrix,
    RightProjectionMatrix as ProjectionMatrix)
-> MulticastSubject Draw
-> Bonsai.Shaders.DrawFramebuffer(RenderState="", FramebufferAttachments="") => #4
#35 -> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    LeftViewMatrix as ViewMatrix,
    LeftProjectionMatrix as ProjectionMatrix)
-> PublishSubject Draw
-> Bonsai.VR.DrawFramebuffer(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit") => #9
#9, #6 -> Zip
-> Bonsai.VR.SubmitTextures => #3
#3, #4 -> Zip
-> WorkflowOutput

IntProperty(Value=0)
-> Take(Count=1)
-> BehaviorSubject ScoreIncrease

Bonsai.Shaders.UpdateFrame => #18
-> Bonsai.Physics.CreateWorld(Gravity(X=0, Y=0, Z=0), StepSize=0.0111, Cfm=1E-10, Erp=0.2)
-> ReplaySubject World(BufferSize=nil)
#18 -> Bonsai.Physics.Collision.CreateHashSpace(MaxContacts=10, ExcludeConnected=true, CollisionHandlers="")
-> ReplaySubject Space(BufferSize=nil)
-> Bonsai.Physics.Collision.CreatePlane(Enabled=true, CategoryBits=1, CollideBits=nil, Material=Plastic, Position=nil, Orientation=nil, A=0, B=1, C=0, D=0) => #23
Bonsai.Shaders.WindowClosed => #26
#23, #26 -> TakeUntil

SubscribeSubject ScoreIncrease
-> Accumulate
-> MulticastSubject CurrentScore

Timer(DueTime=PT0S, Period=PT0S)
-> SelectMany InitialiseTrial
    SubscribeSubject HmdState
    -> MemberSelector(Selector=Source.DevicePose)
    -> NestedWorkflow UpdateCollider
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it.ExtractTranslation() as Position,
            it.ExtractRotation(false) as Orientation)
        -> PropertyMapping => #6
          Position(selector="Source.Position.X,Source.Position.Y,Source.Position.Z")
          Orientation(selector="Source.Orientation.W,Source.Orientation.X,Source.Orientation.Y,Source.Orientation.Z")
        Bonsai.Shaders.WindowClosed => #4
        SubscribeSubject Space
        -> Bonsai.Physics.Collision.CreateCylinder(Enabled=true, CategoryBits=2, CollideBits=nil, Position=nil, Orientation=nil, Radius=0.01, Length=10)
        -> Bonsai.Shaders.LatestOnUpdateFrame => #5
        #5, #6 -> Bonsai.Physics.SetTransform => #8
          Position(X=0.29443418979644775, Y=0.77466344833374023, Z=1.6395076513290405)
          Orientation(W=0.29627597332000732, X=0.012437427416443825, Y=-0.95216530561447144, Z=0.0738043561577797)
        #8, #4 -> TakeUntil
        -> WorkflowOutput

    Timer(DueTime=PT0S, Period=PT0S)
    -> SelectMany CreateFixationBoard
        SubscribeSubject Space => #2
        SubscribeSubject World => #3
        Bonsai.Shaders.UpdateFrame => #13
        ExternalizedPropertyOfVector3CreateBody Position(MemberName=Position, Value(X=1, Y=1.3, Z=0)) => #15
        #3, #15 -> Bonsai.Physics.CreateBody(Position(X=1, Y=1.3, Z=0), Orientation(W=0, X=0, Y=0.70711, Z=0), Kinematic=false) => #4
        #4, #2 -> Bonsai.Physics.Collision.CreateBox(Enabled=true, CategoryBits=1, CollideBits=nil, Material=Plastic, Position=nil, Orientation=nil, LengthX=0.04, LengthY=0.4, LengthZ=0.4)
        -> Sink SetMass => #6
            WorkflowInput Source1
            -> InputMapping(Selector=Source.Body, LengthX(selector=Source.Lengths.X), LengthY(selector=Source.Lengths.Y), LengthZ(selector=Source.Lengths.Z))
            -> Bonsai.Physics.CreateBoxMass(LengthX=0.04, LengthY=0.4, LengthZ=0.4, Density=1)
            -> WorkflowOutput
        -> Bonsai.Shaders.LatestOnUpdateFrame
        -> Sink DrawSphere => #1
            WorkflowInput Source1 => #0
            -> Bonsai.Physics.GetTransform => #15
            #0 -> InputMapping(X(selector=Source.Lengths.X), Y(selector=Source.Lengths.Y), Z(selector=Source.Lengths.Z))
            -> Bonsai.Shaders.CreateScale(X=0.04, Y=0.4, Z=0.4)
            -> Bonsai.Shaders.CreateScale(X=0.02, Y=0.2, Z=0.2) => #17
            SubscribeSubject Draw => #2
            Bonsai.Shaders.UpdateFrame => #13
            #2, #13 -> SubscribeWhen => #12
            -> MemberSelector(Selector=Source.ProjectionMatrix)
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=FixationText) => #9
            #12 -> MemberSelector(Selector=Source.ViewMatrix) => #11
            #17, #15, #11 -> CombineLatest => #3
            #3, #11 -> Sample
            -> Multiply
            -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=FixationText) => #7
            #7, #9 -> Zip
            -> Bonsai.Shaders.DrawMesh(ShaderName=FixationText, MeshName=Billboard)
            -> WorkflowOutput
        #6 -> Bonsai.Physics.Collision.GeomCollision(IncludeContacts=true) => #9
        -> Condition CollideWithHead => #10
            WorkflowInput Source1
            -> MemberSelector(Selector=Source.EventArgs.Geom.CategoryBits)
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.EventArgs.Contacts) => #18
        -> Sink ShowIntersectionPoints
            WorkflowInput Source1 => #0
            -> Condition CollisionDetected => #12
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Length)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Concat
            -> MemberSelector(Selector=Source.Position) => #5
            #12 -> IntProperty(Value=1) => #11
            #0 -> Condition NoCollisionDetected
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #10
            SubscribeSubject HmdState
            -> MemberSelector(Selector=Source.DevicePose) => #6
            #5, #6 -> Zip => #3
            IntProperty(Value=0)
            -> Take(Count=1) => #15
            #10, #11, #15 -> Merge
            -> ExternalizedPropertyOfSingleCreateVector4 W(MemberName=W, Value=0) => #4
            #3, #4 -> NestedWorkflow UpdateCollider
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Source.Item2)
                -> Bonsai.Scripting.ExpressionTransform => #1
                  Expression:
                    new(
                    it.ExtractRotation(false) as Orientation)
                #0 -> MemberSelector(Selector=Source.Item1) => #11
                #1, #11 -> Zip
                -> PropertyMapping => #6
                  Position(selector="Source.Item2.X,Source.Item2.Y,Source.Item2.Z")
                  Orientation(selector="Source.Item1.Orientation.W,Source.Item1.Orientation.X,Source.Item1.Orientation.Y,Source.Item1.Orientation.Z")
                SubscribeSubject Space
                -> Bonsai.Physics.Collision.CreateCylinder(Enabled=true, CategoryBits=3, CollideBits=nil, Material="", Position=nil, Orientation=nil, Radius=0.01, Length=0.001)
                -> Bonsai.Shaders.LatestOnUpdateFrame => #5
                #5, #6 -> Bonsai.Physics.SetTransform => #8
                  Position(X=1.0199999999999996, Y=1.2050904723097995, Z=-0.0094206212092387)
                  Orientation(W=0.78161495923995972, X=-0.027155976742506027, Y=-0.620002269744873, Z=-0.0627523735165596)
                Bonsai.Shaders.WindowClosed => #14
                ExternalizedPropertyOfSingleCreateVector4 W(MemberName=W, Value=0) => #15
                #8, #15 -> Sink DrawCylinder => #4
                    WorkflowInput Source1 => #0
                    -> Bonsai.Physics.GetTransform => #15
                    #0 -> InputMapping(X(selector=Source.Radius), Y(selector=Source.Radius), Z(selector=Source.Length))
                    -> Bonsai.Shaders.CreateScale(X=0.01, Y=0.01, Z=0.001) => #14
                    SubscribeSubject Draw => #2
                    Bonsai.Shaders.UpdateFrame => #13
                    #2, #13 -> SubscribeWhen => #12
                    -> MemberSelector(Selector=Source.ProjectionMatrix)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=Geom) => #9
                    #12 -> MemberSelector(Selector=Source.ViewMatrix) => #11
                    #14, #15, #11 -> CombineLatest => #3
                    #3, #11 -> Sample
                    -> Multiply
                    -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=Geom) => #7
                    ExternalizedPropertyOfSingleCreateVector4 W(MemberName=W, Value=0) => #19
                    #7, #19 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=colour, ShaderName=Geom) => #17
                    #17, #9 -> Zip
                    -> Bonsai.Shaders.DrawMesh(ShaderName=Geom, MeshName=Cylinder)
                    -> WorkflowOutput
                #4, #14 -> TakeUntil
                -> TakeLast(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        #18 -> MemberSelector(Selector=Source.Length)
        #10 -> Condition => #20
            WorkflowInput Source1
            -> MemberSelector(Selector=Source.EventArgs.Contacts.Length)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        #20, #13 -> GazeVR.GroupCollisionsUntil
        -> SelectMany Death
            WorkflowInput Source1
            -> Merge => #2
            Timer(DueTime=PT10S, Period=PT0S) => #5
            #2, #5 -> SkipUntil
            -> Take(Count=1)
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Bonsai.Shaders.SampleOnUpdateFrame => #8
        #1, #8 -> TakeUntil
        -> TakeLast(Count=1)
        -> WorkflowOutput
        #9 -> MemberSelector(Selector=Source.EventArgs.Contacts.Length)

    SubscribeSubject CurrentScore
    -> SelectMany DrawScoreBar
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it*0.1
        -> ExternalizedPropertyOfDoubleCreateCylinder Length(MemberName=Length, Value=0) => #7
        #0 -> Bonsai.Scripting.ExpressionTransform
          Expression: it*0.05
        -> ExternalizedPropertyOfSingleCreateVector3 Y(MemberName=Y, Value=0)
        -> Bonsai.Shaders.CreateVector3(X=2, Y=0, Z=0)
        -> PropertyMapping(Value(selector="Source.X,Source.Y,Source.Y"))
        -> ExternalizedPropertyOfNullableOfVector3SetTransform Position(MemberName=Position, Value(X=2, Y=0, Z=0)) => #10
        SubscribeSubject Space => #8
        #8, #7 -> Bonsai.Physics.Collision.CreateCylinder(Enabled=true, CategoryBits=2, CollideBits=nil, Material="", Position=nil, Orientation=nil, Radius=0.1, Length=0) => #5
        #5, #10 -> Bonsai.Physics.SetTransform(Position(X=2, Y=0, Z=0), Orientation(W=0.70711, X=0.70711, Y=0, Z=0))
        -> Sink DrawCylinder
            WorkflowInput Source1 => #0
            -> Bonsai.Physics.GetTransform => #15
            #0 -> InputMapping(X(selector=Source.Radius), Y(selector=Source.Radius), Z(selector=Source.Length))
            -> Bonsai.Shaders.CreateScale(X=0.1, Y=0.1, Z=0) => #14
            SubscribeSubject Draw => #2
            Bonsai.Shaders.UpdateFrame => #13
            #2, #13 -> SubscribeWhen => #12
            -> MemberSelector(Selector=Source.ProjectionMatrix)
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=Geom) => #9
            #12 -> MemberSelector(Selector=Source.ViewMatrix) => #11
            #14, #15, #11 -> CombineLatest => #3
            #3, #11 -> Sample
            -> Multiply
            -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=Geom) => #7
            ExternalizedPropertyOfSingleCreateVector4 W(MemberName=W, Value=1.5) => #19
            #7, #19 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=1, W=1.5)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colour, ShaderName=Geom) => #17
            #17, #9 -> Zip
            -> Bonsai.Shaders.DrawMesh(ShaderName=Geom, MeshName=Cylinder)
            -> WorkflowOutput
        -> TakeLast(Count=1)
        -> WorkflowOutput

    Timer(DueTime=PT0S, Period=PT0S)
    -> SelectMany CreateFixationPointProper
        SubscribeSubject Space => #1
        SubscribeSubject World
        -> Bonsai.Physics.CreateBody(Position(X=1, Y=1.215, Z=0.5), Orientation(W=0, X=0, Y=0.70711, Z=0), Kinematic=false) => #3
        #3, #1 -> Bonsai.Physics.Collision.CreateBox(Enabled=true, CategoryBits=1, CollideBits=nil, Material=Plastic, Position=nil, Orientation=nil, LengthX=0.005, LengthY=0.05, LengthZ=0.05) => #13
        Bonsai.Shaders.UpdateFrame => #11
        ExternalizedPropertyOfNullableOfVector3SetTransform Position(MemberName=Position, Value(X=1, Y=1.215, Z=0)) => #17
        #13, #17 -> Bonsai.Physics.SetTransform(Position(X=1, Y=1.215, Z=0), Orientation(W=0, X=0, Y=0, Z=0)) => #16
        -> Bonsai.Shaders.LatestOnUpdateFrame => #0
        #16 -> Bonsai.Physics.Collision.GeomCollision(IncludeContacts=true)
        -> Condition CollideWithHead
            WorkflowInput Source1
            -> MemberSelector(Selector=Source.EventArgs.Geom.CategoryBits)
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Condition => #15
            WorkflowInput Source1
            -> MemberSelector(Selector=Source.EventArgs.Contacts.Length)
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        #15, #11 -> GazeVR.GroupCollisionsUntil
        -> SelectMany Death
            WorkflowInput Source1
            -> Merge => #2
            Timer(DueTime=PT1S, Period=PT0S) => #5
            #2, #5 -> SkipUntil
            -> Take(Count=1)
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Bonsai.Shaders.SampleOnUpdateFrame => #6
        #0, #6 -> TakeUntil
        -> TakeLast(Count=1)
        -> WorkflowOutput
    -> WorkflowOutput
-> GazeVR.TimestampEvent(Name=DecisionStart)
-> MulticastSubject Events
-> SelectMany HitSphere => #30
    SubscribeSubject HmdState
    -> MemberSelector(Selector=Source.DevicePose)
    -> NestedWorkflow UpdateCollider
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform => #1
          Expression:
            new(
            it.ExtractTranslation() as Position,
            it.ExtractRotation(false) as Orientation)
        -> PropertyMapping => #6
          Position(selector="Source.Position.X,Source.Position.Y,Source.Position.Z")
          Orientation(selector="Source.Orientation.W,Source.Orientation.X,Source.Orientation.Y,Source.Orientation.Z")
        #1 -> MemberSelector(Selector=Source.Orientation)
        Bonsai.Shaders.WindowClosed => #4
        SubscribeSubject Space
        -> Bonsai.Physics.Collision.CreateCylinder(Enabled=true, CategoryBits=2, CollideBits=nil, Material="", Position=nil, Orientation=nil, Radius=0.01, Length=10)
        -> Bonsai.Shaders.LatestOnUpdateFrame => #5
        #5, #6 -> Bonsai.Physics.SetTransform => #8
          Position(X=-0.2453768253326416, Y=1.3466241359710693, Z=0.25401568412780762)
          Orientation(W=0.88670259714126587, X=-0.0955420583486557, Y=-0.44349342584609985, Z=-0.089128397405147552)
        #8, #4 -> TakeUntil
        -> WorkflowOutput

    Timer(DueTime=PT0S, Period=PT0S)
    -> SelectMany CreateTargetSphere
        SubscribeSubject Space => #3
        SubscribeSubject World => #4
        FloatProperty(Value=35) => #21
        -> Bonsai.Scripting.PythonTransform Y => #13
          Script:
            @returns(float)
            def process(value):
              return 1
        #21 -> Bonsai.Scripting.PythonTransform X => #14
          Script:
            import math

            @returns(float)
            def process(value):
              return math.cos(math.radians(value))
        #21 -> Bonsai.Scripting.PythonTransform Z => #20
          Script:
            import math

            @returns(float)
            def process(value):
              zpos = -math.sin(math.radians(value))
              return zpos
        SubscribeSubject TargetSide => #26
        -> Condition RightTarget
            WorkflowInput Source1
            -> WorkflowOutput
        -> GazeVR.TimestampEvent(Name=TargetRight, Value="")
        -> MulticastSubject Events
        -> IntProperty(Value=1) => #22
        #26 -> Condition LeftTarget
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> GazeVR.TimestampEvent(Name=TargetLeft, Value="")
        -> MulticastSubject Events
        -> IntProperty(Value=-1) => #23
        #22, #23 -> Merge => #19
        #19, #20 -> Zip
        -> Multiply => #12
        #14, #13, #12 -> Zip
        -> InputMapping(Selector="Source.Item1,Source.Item2,Source.Item3", X(selector=Source.Item1), Y(selector=Source.Item2), Z(selector=Source.Item3))
        -> Bonsai.Shaders.CreateVector3(X=0.819152057, Y=1, Z=-0.57357645)
        -> PropertyMapping(Value(selector="Source.X,Source.Y,Source.Z"))
        -> ExternalizedPropertyOfVector3CreateBody Position(MemberName=Position, Value(X=0.81915205717086792, Y=1, Z=-0.57357645034790039)) => #10
        #4, #10 -> Bonsai.Physics.CreateBody(Position(X=0.81915205717086792, Y=1, Z=-0.57357645034790039), Orientation(W=1, X=0, Y=0, Z=0), Kinematic=false) => #5
        #5, #3 -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=1, CollideBits=nil, Material=Plastic, Position=nil, Orientation=nil, Radius=0.1)
        -> Sink SetMass => #6
            WorkflowInput Source1
            -> InputMapping(Selector=Source.Body, Radius(selector=Source.Radius))
            -> Bonsai.Physics.CreateSphereMass(Radius=0.1, Density=1)
            -> WorkflowOutput
        -> Bonsai.Shaders.LatestOnUpdateFrame
        -> Sink DrawSphere
            WorkflowInput Source1 => #0
            -> Bonsai.Physics.GetTransform => #15
            #0 -> InputMapping(X(selector=Source.Radius), Y(selector=Source.Radius), Z(selector=Source.Radius))
            -> Bonsai.Shaders.CreateScale(X=0.1, Y=0.1, Z=0.1) => #14
            SubscribeSubject Draw => #2
            Bonsai.Shaders.UpdateFrame => #13
            #2, #13 -> SubscribeWhen => #12
            -> MemberSelector(Selector=Source.ProjectionMatrix)
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=Geom) => #9
            #12 -> MemberSelector(Selector=Source.ViewMatrix) => #11
            #14, #15, #11 -> CombineLatest => #3
            #3, #11 -> Sample
            -> Multiply
            -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=Geom)
            -> Bonsai.Shaders.CreateVector4(X=0, Y=1, Z=0, W=0.5)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colour, ShaderName=Geom) => #17
            #17, #9 -> Zip
            -> Bonsai.Shaders.DrawMesh(ShaderName=Geom, MeshName=Sphere)
            -> WorkflowOutput
        #6 -> Bonsai.Physics.Collision.GeomCollision(IncludeContacts=true)
        -> Condition CollideWithHead
            WorkflowInput Source1
            -> MemberSelector(Selector=Source.EventArgs.Geom.CategoryBits)
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.EventArgs.Contacts)
        -> Sink ShowIntersectionPoints
            WorkflowInput Source1 => #0
            -> Condition CollisionDetected => #12
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Length)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Concat
            -> MemberSelector(Selector=Source.Position) => #5
            #12 -> IntProperty(Value=1) => #11
            #0 -> Condition NoCollisionDetected
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #10
            SubscribeSubject HmdState
            -> MemberSelector(Selector=Source.DevicePose) => #6
            #5, #6 -> Zip => #3
            IntProperty(Value=0)
            -> Take(Count=1) => #14
            #10, #11, #14 -> Merge
            -> ExternalizedPropertyOfSingleCreateVector4 W(MemberName=W, Value=0) => #4
            #3, #4 -> NestedWorkflow UpdateCollider
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Source.Item2)
                -> Bonsai.Scripting.ExpressionTransform => #1
                  Expression:
                    new(
                    it.ExtractRotation(false) as Orientation)
                #0 -> MemberSelector(Selector=Source.Item1) => #11
                #1, #11 -> Zip
                -> PropertyMapping => #6
                  Position(selector="Source.Item2.X,Source.Item2.Y,Source.Item2.Z")
                  Orientation(selector="Source.Item1.Orientation.W,Source.Item1.Orientation.X,Source.Item1.Orientation.Y,Source.Item1.Orientation.Z")
                SubscribeSubject Space
                -> Bonsai.Physics.Collision.CreateCylinder(Enabled=true, CategoryBits=3, CollideBits=nil, Material="", Position=nil, Orientation=nil, Radius=0.01, Length=0.001)
                -> Bonsai.Shaders.LatestOnUpdateFrame => #5
                #5, #6 -> Bonsai.Physics.SetTransform => #8
                  Position(X=0.82315452765558561, Y=0.9982520861726748, Z=-0.56762934234606366)
                  Orientation(W=0.78466200828552246, X=-0.029912833124399185, Y=-0.615943193435669, Z=-0.063440561294555664)
                Bonsai.Shaders.WindowClosed => #14
                ExternalizedPropertyOfSingleCreateVector4 W(MemberName=W, Value=1) => #15
                #8, #15 -> Sink DrawCylinder => #4
                    WorkflowInput Source1 => #0
                    -> Bonsai.Physics.GetTransform => #15
                    #0 -> InputMapping(X(selector=Source.Radius), Y(selector=Source.Radius), Z(selector=Source.Length))
                    -> Bonsai.Shaders.CreateScale(X=0.01, Y=0.01, Z=0.001) => #14
                    SubscribeSubject Draw => #2
                    Bonsai.Shaders.UpdateFrame => #13
                    #2, #13 -> SubscribeWhen => #12
                    -> MemberSelector(Selector=Source.ProjectionMatrix)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=Geom) => #9
                    #12 -> MemberSelector(Selector=Source.ViewMatrix) => #11
                    #14, #15, #11 -> CombineLatest => #3
                    #3, #11 -> Sample
                    -> Multiply
                    -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=Geom) => #7
                    ExternalizedPropertyOfSingleCreateVector4 W(MemberName=W, Value=1) => #19
                    #7, #19 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=colour, ShaderName=Geom) => #17
                    #17, #9 -> Zip
                    -> Bonsai.Shaders.DrawMesh(ShaderName=Geom, MeshName=Cylinder)
                    -> WorkflowOutput
                #4, #14 -> TakeUntil
                -> TakeLast(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.Length)
        -> MulticastSubject TargetHit
    -> IntProperty(Value=100) => #8
    Timer(DueTime=PT50S, Period=PT0S)
    -> IntProperty(Value=0) => #7
    Timer(DueTime=PT0S, Period=PT0S)
    -> SelectMany CreatePenaltySphere
        SubscribeSubject Space => #3
        SubscribeSubject World => #4
        FloatProperty(Value=30) => #9
        -> Bonsai.Scripting.PythonTransform X => #10
          Script:
            import math

            @returns(float)
            def process(value):
              return math.cos(math.radians(value))
        #9 -> Bonsai.Scripting.PythonTransform Y => #14
          Script:
            @returns(float)
            def process(value):
              return 1
        #9 -> Bonsai.Scripting.PythonTransform Z => #17
          Script:
            import math

            @returns(float)
            def process(value):
              zpos = -math.sin(math.radians(value))
              return zpos
        SubscribeSubject TargetSide => #19
        -> Condition RightTarget
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #21
        #19 -> Condition LeftTarget
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IntProperty(Value=-1) => #22
        #21, #22 -> Merge => #24
        #24, #17 -> Zip
        -> Multiply => #25
        #10, #14, #25 -> Zip
        -> InputMapping(Selector="Source.Item1,Source.Item2,Source.Item3", X(selector=Source.Item1), Y(selector=Source.Item2), Z(selector=Source.Item3))
        -> Bonsai.Shaders.CreateVector3(X=0.8660254, Y=1, Z=-0.5)
        -> PropertyMapping(Value(selector="Source.X,Source.Y,Source.Z"))
        -> ExternalizedPropertyOfVector3CreateBody Position(MemberName=Position, Value(X=0.86602538824081421, Y=1, Z=-0.5)) => #11
        #4, #11 -> Bonsai.Physics.CreateBody(Position(X=0.86602538824081421, Y=1, Z=-0.5), Orientation(W=1, X=0, Y=0, Z=0), Kinematic=false) => #5
        #5, #3 -> Bonsai.Physics.Collision.CreateSphere(Enabled=true, CategoryBits=9, CollideBits=nil, Material=Plastic, Position=nil, Orientation=nil, Radius=0.1)
        -> Sink SetMass => #6
            WorkflowInput Source1
            -> InputMapping(Selector=Source.Body, Radius(selector=Source.Radius))
            -> Bonsai.Physics.CreateSphereMass(Radius=0.1, Density=1)
            -> WorkflowOutput
        -> Bonsai.Shaders.LatestOnUpdateFrame
        -> Sink DrawSphere
            WorkflowInput Source1 => #0
            -> Bonsai.Physics.GetTransform => #15
            #0 -> InputMapping(X(selector=Source.Radius), Y(selector=Source.Radius), Z(selector=Source.Radius))
            -> Bonsai.Shaders.CreateScale(X=0.1, Y=0.1, Z=0.1) => #14
            SubscribeSubject Draw => #2
            Bonsai.Shaders.UpdateFrame => #13
            #2, #13 -> SubscribeWhen => #12
            -> MemberSelector(Selector=Source.ProjectionMatrix)
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=Geom) => #9
            #12 -> MemberSelector(Selector=Source.ViewMatrix) => #11
            #14, #15, #11 -> CombineLatest => #3
            #3, #11 -> Sample
            -> Multiply
            -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=Geom)
            -> Bonsai.Shaders.CreateVector4(X=1, Y=0, Z=0, W=0.5)
            -> Bonsai.Shaders.UpdateUniform(UniformName=colour, ShaderName=Geom) => #17
            #17, #9 -> Zip
            -> Bonsai.Shaders.DrawMesh(ShaderName=Geom, MeshName=Sphere)
            -> WorkflowOutput
        #6 -> Bonsai.Physics.Collision.GeomCollision(IncludeContacts=true)
        -> Condition CollideWithHead
            WorkflowInput Source1
            -> MemberSelector(Selector=Source.EventArgs.Geom.CategoryBits)
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.EventArgs.Contacts)
        -> Sink ShowIntersectionPoints
            WorkflowInput Source1 => #0
            -> Condition CollisionDetected => #12
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Length)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Concat
            -> MemberSelector(Selector=Source.Position) => #5
            #12 -> IntProperty(Value=1) => #11
            #0 -> Condition NoCollisionDetected
                WorkflowInput Source1
                -> MemberSelector(Selector=Source.Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #10
            SubscribeSubject HmdState
            -> MemberSelector(Selector=Source.DevicePose) => #6
            #5, #6 -> Zip => #3
            IntProperty(Value=0)
            -> Take(Count=1) => #15
            #10, #11, #15 -> Merge
            -> ExternalizedPropertyOfSingleCreateVector4 W(MemberName=W, Value=0) => #4
            #3, #4 -> NestedWorkflow UpdateCollider
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Source.Item2)
                -> Bonsai.Scripting.ExpressionTransform => #1
                  Expression:
                    new(
                    it.ExtractRotation(false) as Orientation)
                #0 -> MemberSelector(Selector=Source.Item1) => #11
                #1, #11 -> Zip
                -> PropertyMapping => #6
                  Position(selector="Source.Item2.X,Source.Item2.Y,Source.Item2.Z")
                  Orientation(selector="Source.Item1.Orientation.W,Source.Item1.Orientation.X,Source.Item1.Orientation.Y,Source.Item1.Orientation.Z")
                SubscribeSubject Space
                -> Bonsai.Physics.Collision.CreateCylinder(Enabled=true, CategoryBits=3, CollideBits=nil, Material="", Position=nil, Orientation=nil, Radius=0.01, Length=0.001)
                -> Bonsai.Shaders.LatestOnUpdateFrame => #5
                #5, #6 -> Bonsai.Physics.SetTransform => #8
                  Position(X=0.81744368091349617, Y=1.0001130985304503, Z=-0.56323880173781)
                  Orientation(W=0.78464704751968384, X=-0.030168209224939346, Y=-0.6159628033638, Z=-0.063315056264400482)
                Bonsai.Shaders.WindowClosed => #14
                ExternalizedPropertyOfSingleCreateVector4 W(MemberName=W, Value=1) => #15
                #8, #15 -> Sink DrawCylinder => #4
                    WorkflowInput Source1 => #0
                    -> Bonsai.Physics.GetTransform => #15
                    #0 -> InputMapping(X(selector=Source.Radius), Y(selector=Source.Radius), Z(selector=Source.Length))
                    -> Bonsai.Shaders.CreateScale(X=0.01, Y=0.01, Z=0.001) => #14
                    SubscribeSubject Draw => #2
                    Bonsai.Shaders.UpdateFrame => #13
                    #2, #13 -> SubscribeWhen => #12
                    -> MemberSelector(Selector=Source.ProjectionMatrix)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=Geom) => #9
                    #12 -> MemberSelector(Selector=Source.ViewMatrix) => #11
                    #14, #15, #11 -> CombineLatest => #3
                    #3, #11 -> Sample
                    -> Multiply
                    -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=Geom) => #7
                    ExternalizedPropertyOfSingleCreateVector4 W(MemberName=W, Value=1) => #19
                    #7, #19 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=colour, ShaderName=Geom) => #17
                    #17, #9 -> Zip
                    -> Bonsai.Shaders.DrawMesh(ShaderName=Geom, MeshName=Cylinder)
                    -> WorkflowOutput
                #4, #14 -> TakeUntil
                -> TakeLast(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        -> MemberSelector(Selector=Source.Length)
        -> MulticastSubject PenaltyHit
    -> IntProperty(Value=100) => #4
    SubscribeSubject TargetHit => #27
    SubscribeSubject HmdState
    -> MemberSelector(Selector=Source.AngularVelocity.Y) => #22
    -> Bonsai.Dsp.Abs
    -> Condition StartedMoving => #20
        WorkflowInput Source1
        -> GreaterThan(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    #22, #20 -> SkipUntil
    -> Bonsai.Shaders.Delay(DueTime=PT0.005S)
    -> Condition StoppedMoving => #18
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=FloatProperty(Value=0.2))
        -> WorkflowOutput
    #27, #18 -> SubscribeWhen
    -> Take(Count=1) => #23
    -> Condition BothHit
        SubscribeSubject BothHit
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> IntProperty(Value=3) => #17
    #23 -> Condition OnlyTargetHit
        SubscribeSubject TargetHit
        -> Equal(Operand=IntProperty(Value=1)) => #2
        SubscribeSubject BothHit
        -> Equal(Operand=IntProperty(Value=0)) => #5
        #2, #5 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> IntProperty(Value=1) => #25
    #23 -> Condition OnlyPenaltyHit
        SubscribeSubject PenaltyHit
        -> Equal(Operand=IntProperty(Value=1)) => #3
        SubscribeSubject BothHit
        -> Equal(Operand=IntProperty(Value=0)) => #4
        #3, #4 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> IntProperty(Value=2) => #26
    #23 -> Condition Miss
        SubscribeSubject PenaltyHit
        -> Equal(Operand=IntProperty(Value=0)) => #3
        SubscribeSubject TargetHit
        -> Equal(Operand=IntProperty(Value=0)) => #4
        #3, #4 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> IntProperty(Value=0) => #31
    #4, #7, #8, #25, #26, #17, #31 -> Amb
    -> Take(Count=1)
    -> WorkflowOutput

    GazeVR.RandomGenerator(Seed=nil)
    -> GazeVR.RandomBoolean
    -> BehaviorSubject TargetSide
-> Equal(Operand=IntProperty(Value=1))
-> Condition Target
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany Reward => #45
    WorkflowInput Source1
    -> GazeVR.TimestampEvent(Name=Hit, Value="")
    -> MulticastSubject Events
    -> WorkflowOutput

    IntProperty(Value=1)
    -> MulticastSubject ScoreIncrease
#30 -> Equal(Operand=IntProperty(Value=2))
-> Condition Penalty
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany Punishment => #47
    WorkflowInput Source1
    -> GazeVR.TimestampEvent(Name=Penalty, Value="")
    -> MulticastSubject Events
    -> WorkflowOutput

    IntProperty(Value=-1)
    -> MulticastSubject ScoreIncrease
#30 -> Equal(Operand=IntProperty(Value=0))
-> Condition Miss
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany Missed => #52
    WorkflowInput Source1
    -> GazeVR.TimestampEvent(Name=Missed, Value="")
    -> MulticastSubject Events
    -> WorkflowOutput
#30 -> GreaterThan(Operand=IntProperty(Value=2))
-> Condition HitBoth
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany Neutral => #58
    WorkflowInput Source1
    -> GazeVR.TimestampEvent(Name=Neutral, Value="")
    -> MulticastSubject Events
    -> WorkflowOutput
#45, #47, #52, #58 -> Merge
-> SelectMany
    WorkflowInput Source1
    -> Delay(DueTime=PT2S)
    -> WorkflowOutput
-> RepeatCount(Count=100)
-> Unit => #79
Timer(DueTime=PT0S, Period=PT0S)
-> SelectMany TrialInstructions
    Timer(DueTime=PT0S, Period=PT0S)
    -> WorkflowOutput
-> Unit => #78
#78, #79 -> Concat

SubscribeSubject Events
-> Bonsai.IO.CsvWriter(FileName=events.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)

Timer(DueTime=PT0S, Period=PT0S)
-> GazeVR.TimestampEvent(Name=SessionStart)
-> BehaviorSubject Events

GazeVR.RandomGenerator(Seed=10)
-> ReplaySubject Random(BufferSize=nil)

NestedWorkflow SaveTrajectory
    SubscribeSubject DevicePoses
    -> Bonsai.VR.GetHmdState(NearClip=0.1, FarClip=100)
    -> MemberSelector(Selector=Source.DevicePose)
    -> Timestamp
    -> Bonsai.IO.CsvWriter
      FileName=head.csv
      Append=false
      Overwrite=true
      Suffix=None
      IncludeHeader=true
      Selector: Source.Timestamp,Source.Value.M11,Source.Value.M12,Source.Value.M13,Source.Value.M14,Source.Value.M21,Source.Value.M22,Source.Value.M23,Source.Value.M24,Source.Value.M31,Source.Value.M32,Source.Value.M33,Source.Value.M34,Source.Value.M41,Source.Value.M42,Source.Value.M43,Source.Value.M44

NestedWorkflow DrawGroundSpot
    SubscribeSubject Space => #5
    SubscribeSubject World
    -> Bonsai.Physics.CreateBody(Position(X=0, Y=0, Z=0), Orientation(W=0.70711, X=0.70711, Y=0, Z=0), Kinematic=false) => #4
    #4, #5 -> Bonsai.Physics.Collision.CreateBox(Enabled=true, CategoryBits=1, CollideBits=nil, Material=Plastic, Position=nil, Orientation=nil, LengthX=0.25, LengthY=0.25, LengthZ=0.0001)
    -> Sink SetMass
        WorkflowInput Source1
        -> InputMapping(Selector=Source.Body, LengthX(selector=Source.Lengths.X), LengthY(selector=Source.Lengths.Y), LengthZ(selector=Source.Lengths.Z))
        -> Bonsai.Physics.CreateBoxMass(LengthX=0.25, LengthY=0.25, LengthZ=0.0001, Density=1)
        -> WorkflowOutput
    -> Bonsai.Shaders.LatestOnUpdateFrame
    -> Sink DrawGround
        WorkflowInput Source1 => #0
        -> Bonsai.Physics.GetTransform => #15
        #0 -> InputMapping(X(selector=Source.Lengths.X), Y(selector=Source.Lengths.Y), Z(selector=Source.Lengths.Z))
        -> Bonsai.Shaders.CreateScale(X=0.25, Y=0.25, Z=0.0001) => #14
        SubscribeSubject Draw => #2
        Bonsai.Shaders.UpdateFrame => #13
        #2, #13 -> SubscribeWhen => #12
        -> MemberSelector(Selector=Source.ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=Geom) => #9
        #12 -> MemberSelector(Selector=Source.ViewMatrix) => #11
        #14, #15, #11 -> CombineLatest => #3
        #3, #11 -> Sample
        -> Multiply
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=Geom)
        -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=colour, ShaderName=Geom) => #17
        #17, #9 -> Zip
        -> Bonsai.Shaders.DrawMesh(ShaderName=Geom, MeshName=Ground)
        -> WorkflowOutput

IntProperty(Value=0)
-> Take(Count=1)
-> BehaviorSubject TargetHit

IntProperty(Value=0)
-> Take(Count=1)
-> BehaviorSubject PenaltyHit

SubscribeSubject PenaltyHit => #64
SubscribeSubject TargetHit => #65
#65, #64 -> Zip
-> BitwiseAnd
-> BehaviorSubject BothHit

IntProperty(Value=0)
-> Take(Count=1)
-> BehaviorSubject CurrentScore
